'Make an includable for getting the start time of an smr file from an abf 1.8 header'

proc AbfStartTime(vh%, FileTimeVect%[])

    'Get Smr name'
    var fname$;
    fname$ := FileName$();

    'Command Name Vars
    var PythonProgName$ := "get_abf_start.py";
    'var PythonProgName$ := "test.py";
    var TmpFName$ := "tmp.txt";
    var CmbndCmd$;
    var ProgHnd%;
    var ProSt%;
    
    'Make Cmd for DOS
CmbndCmd$ := Print$("cmd /c %s \"%s\" > %s", PythonProgName$, fname$, TmpFName$);  
    'Run command, and wait for it to finish
    ProgHnd% := ProgRun(CmbndCmd$);
    YieldSystem(4);
    ProSt% := ProgStatus(ProgHnd%);
    YieldSystem(4);
    Yield(4);


    'Pick up script output from text 
    var fhandle%;
    var fyear%, fmonth%, fday%, fhour%, fmin%, fsec%, fmicrosec%;
    fhandle% := FileOpen(TmpFName$, 8);
    View(fhandle%);
    Read(FileTimeVect%[0:7]);
    View(vh%);
end
